PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '', 'group': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = identical session Arabic
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Routines
  Routine WelcomeScreen
    TextComponent textWelcome
      font = Times New Romans
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment

        Please go through the instructions within each phase

        Press "Space" to continue
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GeneralInstruction
    TextComponent text_gen_inst
      font = Times New Romans
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will have three sessions

        This session includes five phases

        Press "Space" to continue
    KeyboardComponent key_Gen_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Phase1instructions
    TextComponent Phase1_inst
      font = Times New Romans
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Phase 1: Sound Recognition phase (pre)
        You will have 2 tasks

        In task 1: You will hear 2 sounds. Your task is to decide whether these sounds are same or different
        Press 1 for Yes and 0 for No

        Ready? press "Space" to start the task
    KeyboardComponent key_Phase1_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Phase1instructions2
    TextComponent text_phase1_inst2
      font = Times New Romans
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In task 2: You will hear 2 Arabic words that may sound the same or may differ only in the initial sound (minimal pairs). Your task is to decide whether the two words are the same or differ only in the initial sounds.

        Press 1 for Yes and 0 for No

        Ready? press "Space" to start the task
    KeyboardComponent key_phase1_inst2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SoundRecognitionT1T2
    SoundComponent sound_thth2
      sound = Sounds/thth.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_thth3
      hamming = False
      sound = Sounds/thth.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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    KeyboardComponent key_SRT1T2
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_SRT1T2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes   0=No
    TextComponent phases_SRT1T2
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1:   4%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT1T1
    SoundComponent sound_thth
      sound = Sounds/thth.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_th
      sound = Sounds/th.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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    KeyboardComponent key_SRT1T1
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_SRT1T1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes  0=No
    TextComponent phases_SRT1T1
      color = red
      letterHeight = 0.02
      pos = (0,-0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1:   0%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT1T3
    SoundComponent sound_thth4
      sound = Sounds/thth.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_sh
      sound = Sounds/sh.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT1T3
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_SRT1T3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes   0=No
    TextComponent phases_SRT1T3
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1:   8%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine Blank
    TextComponent text_blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine SoundRecognitionT1T4
    SoundComponent sound_thth5
      sound = Sounds/thth.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_thth6
      sound = Sounds/thth.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT1T4
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_SRT1T4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1= Yes   0=No
    TextComponent phases_SRT1T4
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1:  12%   Phase 2:   0%   Phase 3:   0%   Phase 4:  0%   Phase 5:   0%
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  Routine SoundRecognitionT1T5
    SoundComponent sound_th2
      sound = Sounds/th.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_thth7
      sound = Sounds/thth.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT1T5
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_SRT1T5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1= Yes   0=No
    TextComponent phases_SRT1T5
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1:  16%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT1T6
    SoundComponent sound_th4
      sound = Sounds/th.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_th3
      sound = Sounds/th.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT1T6
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_SRT1T6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes   0=No
    TextComponent phases_SRT1T6
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1:  20%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT1T7
    SoundComponent sound_th5
      sound = Sounds/th.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_sh8
      sound = Sounds/sh.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT1T7
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_SRT1T7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes   0=No
    TextComponent phases_SRT1T7
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1:  25%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT1T8
    SoundComponent sound_th7
      sound = Sounds/th.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_th8
      sound = Sounds/th.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT1T8
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_SRT1T8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes   0=No
    TextComponent phases_SRT1T8
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1:  29%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT1T9
    SoundComponent sound_sh2
      sound = Sounds/sh.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_thth8
      sound = Sounds/thth.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT1T9
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_SRT1T9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes   0=No
    TextComponent phases_SRT1T9
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 14.5
      text = Phase 1:  33%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT1T10
    SoundComponent sound_sh3
      sound = Sounds/sh.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_th9
      sound = Sounds/th.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT1T10
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_SRT1T10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes   0=No
    TextComponent phases_SRT1T10
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1:  37%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT1T11
    SoundComponent sound_sh4
      sound = Sounds/sh.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_sh5
      sound = Sounds/sh.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT1T11
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_SRT1T11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes   0=No
    TextComponent phases_SRT1T11
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1:  41%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT1T12
    SoundComponent sound_sh6
      sound = Sounds/sh.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_sh7
      sound = Sounds/sh.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT1T12
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_SRT1T12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes   0=No
    TextComponent phases_SRT1T12
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1:  45%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT2T1
    SoundComponent sound_thrwa_thrwa
      sound = Sounds/thrwa-thrwa.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT2T1
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 04.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_SRT2T1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_SRT2T1
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1:  50%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT2T2
    SoundComponent sound_ththm_thm
      sound = Sounds/ththm-thm.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT2T2
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_SRT2T2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_SRT2T2
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1:  54%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT2T3
    SoundComponent sound_ththab_shab
      sound = Sounds/ththab-shab.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT2T3
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_SRT2T3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_SRT2T3
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1:  58%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT2T4
    SoundComponent sound_ththna_ththna
      sound = Sounds/ththna-ththna.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT2T4
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_SRT2T4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_SRT2T4
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1:  62%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT2T5
    SoundComponent sound_thra_ththra
      sound = Sounds/thra-ththra.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT2T5
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_SRT2T5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_SRT2T5
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1:  66%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT2T6
    SoundComponent sound_thb7_shb7
      sound = Sounds/thb7-shb7.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT2T6
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_SRT2T6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_SRT2T6
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1:  70%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT2T7
    SoundComponent sound_thwq_thwq
      sound = Sounds/thwq-thwq.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT2T7
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_SRT2T7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_SRT2T7
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1:  75%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT2T8
    SoundComponent sound_thail_thail
      sound = Sounds/thail-thail.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT2T8
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_SRT2T8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_SRT2T8
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1:  79%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT2T9
    SoundComponent sound_shrf_thrf
      sound = Sounds/shrf-thrf.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT2T9
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_SRT2T9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_SRT2T9
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1:  83%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT2T10
    SoundComponent sound_sh7m_sh7m
      sound = Sounds/sh7m-sh7m.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT2T10
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_SRT2T10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_SRT2T10
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1:  87%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT2T11
    SoundComponent sound_shra_ththra
      sound = Sounds/shra-ththra.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT2T11
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_SRT2T11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_SRT2T11
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1:  91%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine SoundRecognitionT2T12
    SoundComponent sound_shfa_shfa
      sound = Sounds/shfa-shfa.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_SRT2T12
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_SRT2T12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_SRT2T12
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1:  95%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine EndSoundRecognition
    TextComponent text_EndSR
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of the first phase.

        Please press 'Space' to move to the second phase whenever you are ready
    KeyboardComponent key_EndSR
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent phases_endSR
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Phase 1: 100%   Phase 2:   0%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine Phase2instructions
    TextComponent text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Phase 2: Word learning phase

        You will learn new Arabic non-words. You will hear how they are pronounced and see the corresponding pictures with their Arabic written forms.

        Arabic language is written from the right to the left

        These non-words will be repeated many times.

        You are not required to do anything in this phase, just learn

        Press "Space" to continue.
    KeyboardComponent key_WLinst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WordLearningT1
    SoundComponent sound_ththami
      sound = Sounds/ththami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5.2
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    ImageComponent image_ththami
      image = Images/ththami.jpg
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9.8
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    SoundComponent sound_thami
      sound = Sounds/thami.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 5
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    ImageComponent image_thami
      image = Images/thami.jpg
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 5
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  Routine WordLearningT2
    SoundComponent sound_ththuri
      sound = Sounds/ththuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5.2
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    ImageComponent image_ththuri
      image = Images/ththuri.jpg
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9.8
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    SoundComponent sound_thuri
      sound = Sounds/thuri.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 5
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    ImageComponent image_thuri
      image = Images/thuri.jpg
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 5
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  Routine WordLearningT3
    SoundComponent sound_ththano
      sound = Sounds/ththano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5.2
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    ImageComponent image_ththano
      image = Images/ththano.jpg
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9.8
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    SoundComponent sound_thano
      sound = Sounds/thano.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 5
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    ImageComponent image_thano
      image = Images/thano.jpg
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 5
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  Routine EndWordLearning
    TextComponent text_EndWL
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of the second phase.

        Please press 'Space' to move to the third phase whenever you are ready
    KeyboardComponent key_EndWL
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent phases_endWL
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT1T1
    SoundComponent sound_thuri2
      sound = Sounds/thuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_thuri2
      image = Images/thuri2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent Text_CT_T1T1
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_CT_T1T1
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T1T1
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:   0%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT1T2
    SoundComponent sound_thano2
      sound = Sounds/thano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_ththami2
      image = Images/ththami2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T1T2
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_CT_T1T2
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T1T2
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:   4%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT1T8
    SoundComponent sound_ththuri2
      sound = Sounds/ththuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_thami2
      image = Images/thami2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T1T8
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_CT_T1T8
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T1T8
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  29%   Phase 4:   0%   Phase 5:   0%
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  Routine CritertionTestT1T10
    SoundComponent sound_ththami2
      sound = Sounds/ththami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_thano2
      image = Images/thano2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T1T10
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_CT_T1T10
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T1T10
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  37%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT1T12
    SoundComponent sound_thami2
      sound = Sounds/thami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_ththuri2
      image = Images/ththuri2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T1T12
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_CT_T1T12
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T1T12
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  45%   Phase 4:   0%   Phase 5:   0%
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  Routine CriteterionTestT1T5
    SoundComponent sound_ththano2
      sound = Sounds/ththano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_thuri3
      image = Images/thuri2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T1T5
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_CT_T1T5
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T1T5
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  16%   Phase 4:   0%   Phase 5:   0%
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  Routine CritertionTestT1T7
    SoundComponent sound_thuri3
      sound = Sounds/thuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_ththano2
      image = Images/ththano2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T1T7
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_CT_T1T7
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T1T7
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  25%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT1T3
    SoundComponent sound_ththuri3
      sound = Sounds/ththuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_ththuri3
      image = Images/ththuri2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T1T3
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_CT_T1T3
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T1T3
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:   8%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT1T4
    SoundComponent sound_thami3
      sound = Sounds/thami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_thami3
      image = Images/thami2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T1T4
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_CT_T1T4
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T1T4
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  12%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT1T6
    SoundComponent sound_ththami3
      sound = Sounds/ththami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_ththami3
      image = Images/ththami2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T1T6
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_CT_T1T6
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T1T6
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  20%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT1T9
    SoundComponent sound_thano3
      sound = Sounds/thano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_thano3
      image = Images/thano2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T1T9
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_CT_T1T9
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T1T9
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  33%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT1T11
    SoundComponent sound_ththano3
      sound = Sounds/ththano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_ththano3
      image = Images/ththano2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T1T11
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_CT_T1T11
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T1T11
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  41%   Phase 4:   0%   Phase 5:   0%
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  Routine Phase3instructions2_2
    TextComponent text_CTinstructions2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In task 2: you will have two pictures and you will hear a word.

        Your task is to choose the correct picture that represents the word.

        Choose either '1' or '0'

        Ready? Press 'Space' to start the task.
    KeyboardComponent key_CTinstructions2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Phase3Instructions1
    TextComponent text_CTInstructionsT1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Phase 3: Criterion test phase

        You will have two tasks.

        In Task 1: You will hear a word and see a picture, your task is to decide whether this picture represents the word you just heard.

        Press 1 for Yes and 0 for No

        Ready? press "Space" to start the task
    KeyboardComponent key_CTinstructionsT1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CriterionTestT2T1
    ImageComponent image_ththuri4
      image = Images/ththuri2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_thano4
      image = Images/thano2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T2T1_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_CT_T2T1_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_ththuri4
      sound = Sounds/ththuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_CT_T2T1
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_CT_T2T1
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T2T1
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  50%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT2T2
    ImageComponent image_thuri4
      image = Images/thuri2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_ththami4
      image = Images/ththami2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T2T2_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_CT_T2T2_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_ththami4
      sound = Sounds/ththami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_CT_T2T2
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_CT_T2T2
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      storeCorrect = True
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    TextComponent CT_T2T2
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  54%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT2T3
    ImageComponent image_ththano4
      image = Images/ththano2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_thami4
      image = Images/thami2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T2T3_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_CT_T2T3_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_ththano4
      sound = Sounds/ththano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_CT_T2T3
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_CT_T2T3
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T2T3
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  58%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT3T4
    ImageComponent image_ththami5
      image = Images/ththami2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_thano5
      image = Images/thano2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T2T4_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_CT_T2T4_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_ththami5
      sound = Sounds/ththami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_CT_T2T4
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_CT_T2T4
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      storeCorrect = True
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    TextComponent phases_CT_T2T4
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  62%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT2T5
    ImageComponent image_thami5
      image = Images/thami2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_ththuri5
      image = Images/ththuri2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T2T5_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_CT_T2T5_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_ththuri5
      sound = Sounds/ththuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_CT_T2T5
      durationEstim = 9.2
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_CT_T2T5
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T2T5
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  66%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT2T6
    ImageComponent image_ththano5
      image = Images/ththano2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_thuri5
      image = Images/thuri2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T2T6_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_CT_T2T6_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_ththano5
      sound = Sounds/ththano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_CT_T2T6
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_CT_T2T6
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T2T6
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  70%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT2T7
    ImageComponent image_ththami6
      image = Images/ththami2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_thuri6
      image = Images/thuri2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T2T7_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_CT_T2T7_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_thuri5
      sound = Sounds/thuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_CT_T2T7
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_CT_T2T7
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T2T7
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  75%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT2T8
    ImageComponent image_ththano6
      image = Images/ththano2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_thami6
      image = Images/thami2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T2T8_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_CT_T2T8_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_thami4
      sound = Sounds/thami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_CT_T2T8
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_CT_T2T8
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T2T8
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  79%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT2T9
    ImageComponent image_ththuri6
      image = Images/ththuri2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_thano6
      image = Images/thano2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T2T9_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_CT_T2T9_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_thano4
      sound = Sounds/thano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_CT_T2T9
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_CT_T2T9
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T2T9
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  83%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT2T10
    ImageComponent image_thuri7
      image = Images/thuri2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_ththano7
      image = Images/ththano2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T2T10_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_CT_T2T10_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_thuri4
      sound = Sounds/thuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_CT_T2T10
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_CT_T2T10
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T2T10
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  87%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT2T11
    ImageComponent image_ththami7
      image = Images/ththami2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_thano7
      image = Images/thano2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T2T11_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_CT_T2T11_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_thano5
      sound = Sounds/thano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_CT_T2T11
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_CT_T2T11
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T2T11
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  91%   Phase 4:   0%   Phase 5:   0%
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  Routine CriterionTestT2T12
    ImageComponent image_thami7
      image = Images/thami2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_ththuri7
      image = Images/ththuri2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_CT_T2T12_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_CT_T2T12_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_thami5
      sound = Sounds/thami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_CT_T2T12
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_CT_T2T12
      allowedKeys = '1','0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_CT_T2T12
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3:  95%   Phase 4:   0%   Phase 5:   0%
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  Routine EndCriterionTest
    TextComponent text_EndCT
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of the third phase.

        Please press 'Space' to move to the fourth phase whenever you are ready
    KeyboardComponent key_EndCT
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent phases_endCT
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:   0%   Phase 5:   0%
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  Routine Phase4Instructions1
    TextComponent text_FTinstructions1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Phase 4: Final test phase

        You will have two tasks very similar to those in Phase 3.

        In Task 1: You will hear a word and see a picture, your task is to decide whether this picture represents the word you just heard.

        Press 1 for Yes and 0 for No

        Ready? press "Space" to start the task
    KeyboardComponent key_FTinstructions1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FinalTestT1T1
    SoundComponent sound_ththuri6
      sound = Sounds/ththuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_thuri8
      image = Images/thuri2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T1T1
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_FT_T1T1
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T1T1
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:   0%   Phase 5:   0%
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  Routine FinalTestT1T2
    SoundComponent sound_thami6
      sound = Sounds/thami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_ththami8
      image = Images/ththami2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T1T2
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_FT_T1T2
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T1T2
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:   4%   Phase 5:   0%
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  Routine FinalTestT1T3
    SoundComponent sound_thuri6
      sound = Sounds/thuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_thuri9
      image = Images/thuri2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T1T3
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_FT_T1T3
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T1T3
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:   8%   Phase 5:   0%
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  Routine FinalTestT1T4
    SoundComponent sound_ththami6
      sound = Sounds/ththami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_thami8
      image = Images/thami2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T1T4
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_FT_T1T4
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T1T4
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  12%   Phase 5:   0%
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  Routine FinalTestT1T5
    SoundComponent sound_thano6
      sound = Sounds/thano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_thano8
      image = Images/thano2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T1T5
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_FT_T1T5
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T1T5
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  16%   Phase 5:   0%
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  Routine FinalTestT1T6
    SoundComponent sound_ththami7
      sound = Sounds/ththami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_ththami9
      image = Images/ththami2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T1T6
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_FT_T1T6
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T1T6
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  20%   Phase 5:   0%
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  Routine FinalTestT1T7
    SoundComponent sound_thami7
      sound = Sounds/thami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_thami9
      image = Images/thami2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T1T7
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_FT_T1T7
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T1T7
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  25%   Phase 5:   0%
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  Routine FinalTestT1T8
    SoundComponent sound_ththano6
      sound = Sounds/ththano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_thano9
      image = Images/thano2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T1T8
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_FT_T1T8
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T1T8
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  29%   Phase 5:   0%
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
  Routine FinalTestT1T9
    SoundComponent sound_ththuri7
      sound = Sounds/ththuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_ththuri8
      image = Images/ththuri2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T1T9
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_FT_T1T9
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T1T9
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  33%   Phase 5:   0%
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  Routine FinalTestT1T10
    SoundComponent sound_thano7
      sound = Sounds/thano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_ththano8
      image = Images/ththano2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T1T10
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_FT_T1T10
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T1T10
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  37%   Phase 5:   0%
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  Routine FinalTestT1T11
    SoundComponent sound_thuri7
      sound = Sounds/thuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_ththuri9
      image = Images/ththuri2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T1T11
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_FT_T1T11
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T1T11
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  41%   Phase 5:   0%
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  Routine FinalTestT1T12
    SoundComponent sound_ththano7
      sound = Sounds/ththano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    ImageComponent image_ththano9
      image = Images/ththano2.jpg
      pos = (0, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T1T12
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
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      text:
        Does the picture represent the word you heard?

        1=Yes   0=No
    KeyboardComponent key_FT_T1T12
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T1T12
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  45%   Phase 5:   0%
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  Routine Phase4Instructions2
    TextComponent text_FTinstructiosn2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In task 2: you will have two pictures and you will hear a word.

        Your task is to choose the correct picture that represents the word.

        Choose either '1' or '0'

        Ready? Press 'Space' to start the task.
    KeyboardComponent key_FTinstructions2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FinalTestT2T1
    ImageComponent image_ththami10
      image = Images/ththami2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_thami10
      image = Images/thami2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T2T1_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_FT_T2T1_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_ththami8
      sound = Sounds/ththami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_FT_T2T1
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_FT_T2T1
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T2T1
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  50%   Phase 5:   0%
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  Routine FinalTestT2T2
    ImageComponent image_thano10
      image = Images/thano2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_ththano10
      image = Images/ththano2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T2T2_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_FT_T2T2_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_thano8
      sound = Sounds/thano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_FT_T2T2
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_FT_T2T2
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T2T2
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  54%   Phase 5:   0%
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  Routine FinalTestT2T3
    ImageComponent image_ththuri10
      image = Images/ththuri2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_thuri10
      image = Images/thuri2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T2T3_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_FT_T2T3_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_thuri8
      sound = Sounds/thuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_FT_T2T3
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_FT_T2T3
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T2T3
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  58%   Phase 5:   0%
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  Routine FinalTestT2T4
    ImageComponent image_thami11
      image = Images/thami2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_ththami11
      image = Images/ththami2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T2T4_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_FT_T2T4_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_thami8
      sound = Sounds/thami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_FT_T2T4
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_FT_T2T4
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T2T4
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  62%   Phase 5:   0%
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  Routine FinalTestT2T5
    ImageComponent image_ththano11
      image = Images/ththano2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_thano11
      image = Images/thano2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T2T5_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_FT_T2T5_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_thano9
      sound = Sounds/thano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
      volume = 0
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    TextComponent text_FT_T2T5
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_FT_T2T5
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T2T5
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  66%   Phase 5:   0%
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  Routine FinalTestT2T6
    ImageComponent image_thuri11
      image = Images/thuri2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_ththuri11
      image = Images/ththuri2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T2T6_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_FT_T2T6_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_ththuri8
      sound = Sounds/ththuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
      volume = 0
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    TextComponent text_FT_T2T6
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_FT_T2T6
      allowedKeys = '1' , '0'
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
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    TextComponent phases_FT_T2T6
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  70%   Phase 5:   0%
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  Routine FinalTestT2T7
    ImageComponent image_ththano12
      image = Images/ththano2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_thano12
      image = Images/thano2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T2T7_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_FT_T2T7_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_ththano9
      sound = Sounds/ththano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_FT_T2T7
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_FT_T2T7
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T2T7
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  75%   Phase 5:   0%
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  Routine FinalTestT2T8
    ImageComponent image_ththami12
      image = Images/ththami2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_thami12
      image = Images/thami2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T2T8_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_FT_T2T8_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_thami9
      sound = Sounds/thami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_FT_T2T8
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_FT_T2T8
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T2T8
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  79%   Phase 5:   0%
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  Routine FinalTestT2T9
    ImageComponent image_thuri12
      image = Images/thuri2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_ththuri12
      image = Images/ththuri2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T2T9_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_FT_T2T9_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_thuri9
      sound = Sounds/thuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_FT_T2T9
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_FT_T2T9
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T2T9
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  83%   Phase 5:   0%
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  Routine FinalTestT2T10
    ImageComponent image_thami13
      image = Images/thami2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_ththami13
      image = Images/ththami2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T2T10_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_FT_T2T10_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_ththami9
      sound = Sounds/ththami.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_FT_T2T10
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_FT_T2T10
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T2T10
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  87%   Phase 5:   0%
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  Routine FinalTestT2T11
    ImageComponent image_thano13
      image = Images/thano2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_ththano13
      image = Images/ththano2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T2T11_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_FT_T2T11_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_ththano10
      sound = Sounds/ththano.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_FT_T2T11
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_FT_T2T11
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T2T11
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  91%   Phase 5:   0%
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  Routine FinalTestT2T12
    ImageComponent image_ththuri13
      image = Images/ththuri2.jpg
      pos = (-0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    ImageComponent image_thuri13
      image = Images/thuri2.jpg
      pos = (0.5, -0.15)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
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    TextComponent text_FT_T2T12_1
      letterHeight = 0.15
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 1
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    TextComponent text_FT_T2T12_0
      letterHeight = 0.15
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 9
      text = 0
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    SoundComponent sound_ththuri9
      sound = Sounds/ththuri.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
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    TextComponent text_FT_T2T12
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Choose 1 or 0
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    KeyboardComponent key_FT_T2T12
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent phases_FT_T2T12
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4:  95%   Phase 5:   0%
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  Routine EndPhase4
    TextComponent text_EndFT
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of the fourth phase.

        Please press 'Space' to move to the final phase whenever you are ready
    KeyboardComponent key_FTEng
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent phases_endFT
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:   0%
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  Routine Phase5Instructions1
    TextComponent text_SRpos_tinstructions1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Phase 5: Sound Recognition phase (post)
        This phase is identical to the first phase

        You will have 2 tasks

        In task 1: You will hear 2 sounds. Your task is to decide whether these sounds are same or different
        Press 1 for Yes and 0 for No

        Ready? press "Space" to start the task
    KeyboardComponent key_SRpos_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndExperiment
    TextComponent text_EndExperiment
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of this session.

        Thank you for your precious time

        Please contact the researcher

        Press "Space" to exit
    KeyboardComponent key_EndExperiment
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent phases_end
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5: 100%
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  Routine Phase5T1T1
    SoundComponent sound_thth9
      sound = Sounds/thth.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_th6
      sound = Sounds/th.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T1T1
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_Ph5T1T1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes  0=No
    TextComponent phases_Ph5T1T1
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:   0%
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  Routine Phase5T1T2
    SoundComponent sound_thth10
      sound = Sounds/thth.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_thth11
      sound = Sounds/thth.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T1T2
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_Ph5T1T2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes  0=No
    TextComponent phases_Ph5T1T2
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:   4%
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  Routine Phase5T1T3
    SoundComponent sound_thth12
      sound = Sounds/thth.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_sh9
      sound = Sounds/sh.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T1T3
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_Ph5T1T3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes  0=No
    TextComponent phases_Ph5T1T3
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:   8%
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  Routine Phase5T1T4
    SoundComponent sound_thth13
      sound = Sounds/thth.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_thth14
      sound = Sounds/thth.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T1T4
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_Ph5T1T4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes  0=No
    TextComponent phases_Ph5T1T4
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  12%
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  Routine Phase5T1T5
    SoundComponent sound_th10
      sound = Sounds/th.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_thth15
      sound = Sounds/thth.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T1T5
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_Ph5T1T5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes  0=No
    TextComponent phases_Ph5T1T5
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  16%
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  Routine Phase5T1T10
    SoundComponent sound_sh12
      sound = Sounds/sh.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_th16
      sound = Sounds/th.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T1T10
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_Ph5T1T10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes  0=No
    TextComponent phases_Ph5T1T10
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  37%
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  Routine Phase5T1T6
    SoundComponent sound_th11
      sound = Sounds/th.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_th12
      sound = Sounds/th.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T1T6
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_Ph5T1T6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes  0=No
    TextComponent phases_Ph5T1T6
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  20%
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  Routine Phase5T1T7
    SoundComponent sound_th13
      sound = Sounds/th.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_sh10
      sound = Sounds/sh.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T1T7
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_Ph5T1T7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes  0=No
    TextComponent phases_Ph5T1T7
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  25%
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  Routine Phase5T1T8
    SoundComponent sound_th14
      sound = Sounds/th.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_th15
      sound = Sounds/th.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T1T8
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_Ph5T1T8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes  0=No
    TextComponent phases_Ph5T1T8
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  29%
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  Routine Phase5T1T9
    SoundComponent sound_sh11
      sound = Sounds/sh.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_thth16
      sound = Sounds/thth.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T1T9
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_Ph5T1T9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes  0=No
    TextComponent phases_Ph5T1T9
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  33%
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  Routine Phase5T1T11
    SoundComponent sound_sh13
      sound = Sounds/sh.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_sh14
      sound = Sounds/sh.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T1T11
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_Ph5T1T11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes  0=No
    TextComponent phases_Ph5T1T11
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  41%
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  Routine Phase5T1T12
    SoundComponent sound_sh15
      sound = Sounds/sh.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    SoundComponent sound_sh16
      sound = Sounds/sh.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T1T12
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 6.5
      storeCorrect = True
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    TextComponent text_Ph5T1T12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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      text:
        Do they sound the same?

        1=Yes  0=No
    TextComponent phases_Ph5T1T12
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  45%
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  Routine Phase5T2T1
    SoundComponent sound_thrwa_thrwa2
      sound = Sounds/thrwa-thrwa.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T2T1
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_Ph5T2T1
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  50%
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  Routine Phase5T2T2
    SoundComponent sound_ththm_thm2
      sound = Sounds/ththm-thm.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T2T2
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_Ph5T2T2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_Ph5T2T2
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  54%
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  Routine Phase5T2T4
    SoundComponent sound_ththna_ththna2
      sound = Sounds/ththna-ththna.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T2T4
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_Ph5T2T4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_Ph5T2T4
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  62%
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  Routine Phase5T2T5
    SoundComponent sound_thra_ththra2
      sound = Sounds/thra-ththra.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T2T5
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_Ph5T2T5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_Ph5T2T5
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  66%
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  Routine Phase5T2T6
    SoundComponent sound_thb7_shb72
      sound = Sounds/thb7-shb7.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T2T6
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_Ph5T2T6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_Ph5T2T6
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  70%
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  Routine Phase5T2T7
    SoundComponent sound_thwq_thwq2
      sound = Sounds/thwq-thwq.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T2T7
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_Ph5T2T7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_Ph5T2T7
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  75%
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  Routine Phase5T2T3
    SoundComponent sound_ththab_shab2
      sound = Sounds/ththab-shab.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T2T3
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_Ph5T2T3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_Ph5T2T3
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  58%
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  Routine Phase5T2T8
    SoundComponent sound_thail_thail2
      sound = Sounds/thail-thail.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T2T8
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_Ph5T2T8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_Ph5T2T8
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  79%
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  Routine Phase5T2T9
    SoundComponent sound_shrf_thrf2
      sound = Sounds/shrf-thrf.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T2T9
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_Ph5T2T9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_Ph5T2T9
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  83%
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  Routine Phase5T2T10
    SoundComponent sound_sh7m_sh7m2
      sound = Sounds/sh7m-sh7m.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T2T10
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_Ph5T2T10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_Ph5T2T10
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  87%
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  Routine Phase5T2T11
    SoundComponent sound_shra_ththra2
      sound = Sounds/shra-ththra.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T2T11
      allowedKeys = '1' , '0'
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_Ph5T2T11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_Ph5T2T11
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  91%
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  Routine Phase5T2T12
    SoundComponent sound_shfa_shfa2
      sound = Sounds/shfa-shfa.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent key_Ph5T2T12
      allowedKeys = '1' , '0'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent text_Ph5T2T12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
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      text:
        Do the two words initially sound the same?

        1=Yes   0=No
    TextComponent phases_Ph5T2T12
      color = red
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text = Phase 1: 100%   Phase 2: 100%   Phase 3: 100%   Phase 4: 100%   Phase 5:  95%
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Flow
  Routine WelcomeScreen
  Routine GeneralInstruction
  Routine Phase1instructions
  Routine SoundRecognitionT1T1
  Routine Blank
  Routine SoundRecognitionT1T2
  Routine Blank
  Routine SoundRecognitionT1T3
  Routine Blank
  Routine SoundRecognitionT1T4
  Routine Blank
  Routine SoundRecognitionT1T5
  Routine Blank
  Routine SoundRecognitionT1T6
  Routine Blank
  Routine SoundRecognitionT1T7
  Routine Blank
  Routine SoundRecognitionT1T8
  Routine Blank
  Routine SoundRecognitionT1T9
  Routine Blank
  Routine SoundRecognitionT1T10
  Routine Blank
  Routine SoundRecognitionT1T11
  Routine Blank
  Routine SoundRecognitionT1T12
  Routine Blank
  Routine Phase1instructions2
  Routine SoundRecognitionT2T1
  Routine Blank
  Routine SoundRecognitionT2T2
  Routine Blank
  Routine SoundRecognitionT2T3
  Routine Blank
  Routine SoundRecognitionT2T4
  Routine Blank
  Routine SoundRecognitionT2T5
  Routine Blank
  Routine SoundRecognitionT2T6
  Routine Blank
  Routine SoundRecognitionT2T7
  Routine Blank
  Routine SoundRecognitionT2T8
  Routine Blank
  Routine SoundRecognitionT2T9
  Routine Blank
  Routine SoundRecognitionT2T10
  Routine Blank
  Routine SoundRecognitionT2T11
  Routine Blank
  Routine SoundRecognitionT2T12
  Routine Blank
  Routine EndSoundRecognition
  Routine Phase2instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine WordLearningT1
    Routine WordLearningT2
    Routine WordLearningT3
  LoopTerminator trials
  Routine Blank
  Routine EndWordLearning
  Routine Phase3Instructions1
  Routine CriterionTestT1T1
  Routine CriterionTestT1T2
  Routine CriterionTestT1T3
  Routine CriterionTestT1T4
  Routine CriteterionTestT1T5
  Routine CriterionTestT1T6
  Routine CritertionTestT1T7
  Routine CriterionTestT1T8
  Routine CriterionTestT1T9
  Routine CritertionTestT1T10
  Routine CriterionTestT1T11
  Routine CriterionTestT1T12
  Routine Phase3instructions2_2
  Routine CriterionTestT2T1
  Routine CriterionTestT2T2
  Routine CriterionTestT2T3
  Routine CriterionTestT3T4
  Routine CriterionTestT2T5
  Routine CriterionTestT2T6
  Routine CriterionTestT2T7
  Routine CriterionTestT2T8
  Routine CriterionTestT2T9
  Routine CriterionTestT2T10
  Routine CriterionTestT2T11
  Routine CriterionTestT2T12
  Routine EndCriterionTest
  Routine Phase4Instructions1
  Routine FinalTestT1T1
  Routine FinalTestT1T2
  Routine FinalTestT1T3
  Routine FinalTestT1T4
  Routine FinalTestT1T5
  Routine FinalTestT1T6
  Routine FinalTestT1T7
  Routine FinalTestT1T8
  Routine FinalTestT1T9
  Routine FinalTestT1T10
  Routine FinalTestT1T11
  Routine FinalTestT1T12
  Routine Phase4Instructions2
  Routine FinalTestT2T1
  Routine FinalTestT2T2
  Routine FinalTestT2T3
  Routine FinalTestT2T4
  Routine FinalTestT2T5
  Routine FinalTestT2T6
  Routine FinalTestT2T7
  Routine FinalTestT2T8
  Routine FinalTestT2T9
  Routine FinalTestT2T10
  Routine FinalTestT2T11
  Routine FinalTestT2T12
  Routine EndPhase4
  Routine Phase5Instructions1
  Routine Phase5T1T1
  Routine Blank
  Routine Phase5T1T2
  Routine Blank
  Routine Phase5T1T3
  Routine Blank
  Routine Phase5T1T4
  Routine Blank
  Routine Phase5T1T5
  Routine Blank
  Routine Phase5T1T6
  Routine Blank
  Routine Phase5T1T7
  Routine Blank
  Routine Phase5T1T8
  Routine Blank
  Routine Phase5T1T9
  Routine Blank
  Routine Phase5T1T10
  Routine Blank
  Routine Phase5T1T11
  Routine Blank
  Routine Phase5T1T12
  Routine Phase1instructions2
  Routine Phase5T2T1
  Routine Blank
  Routine Phase5T2T2
  Routine Blank
  Routine Phase5T2T3
  Routine Blank
  Routine Phase5T2T4
  Routine Blank
  Routine Phase5T2T5
  Routine Blank
  Routine Phase5T2T6
  Routine Blank
  Routine Phase5T2T7
  Routine Blank
  Routine Phase5T2T8
  Routine Blank
  Routine Phase5T2T9
  Routine Blank
  Routine Phase5T2T10
  Routine Blank
  Routine Phase5T2T11
  Routine Blank
  Routine Phase5T2T12
  Routine EndExperiment
